Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/img3.png % % B B 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/distractor%20-%20img5.png % % C C 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/img1.png % % D D 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/img4.png % % E E 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/distractor%20-%20img7.png % % F F 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/distractor%20-%20img8.png % % G G 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/distractor%20-%20img9.png % % H H 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/distractor%20-%20img6.png % % I I 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Palabras/B1/N1/tarea%20I/img2.png % % // speller target properties