Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 F:/Cognitask/sec/Palabras/Noviembre/img4.png % % B B 1 F:/Cognitask/sec/Palabras/Noviembre/img7.png % % C C 1 F:/Cognitask/sec/Palabras/Noviembre/img9.png % % D D 1 F:/Cognitask/sec/Palabras/Noviembre/img5.png % % E E 1 F:/Cognitask/sec/Palabras/Noviembre/img3.png % % F F 1 F:/Cognitask/sec/Palabras/Noviembre/img6.png % % G G 1 F:/Cognitask/sec/Palabras/Noviembre/img2.png % % H H 1 F:/Cognitask/sec/Palabras/Noviembre/img1.png % % I I 1 F:/Cognitask/sec/Palabras/Noviembre/img8.png % % // speller target properties